

dir1 = getDirectory("Choose Source Directory ");
dir2 = getDirectory("Choose Destination Directory ");
list = getFileList(dir1);     //gets list of files in dir1
setBatchMode(false);
for (i=0; i<list.length; i++) 
{
    showProgress(i+1, list.length);
    filename = dir1 + list[i];
    string=replace(list[i],"(.dv)",""); 


    if (endsWith(filename, "SIR_EAL.dv")) 
    {

      open(filename);

      getDimensions(w,h,chan,sli,fra);

      SIR=getTitle();
      RAW=replace(SIR,"(_SIR_EAL.dv)","_EAL.dv");
      //runs the SIMcheck 16bit mode threshold (16bit):
      run("Threshold and 16-bit Conversion", "auto-scale");
      THR=replace(SIR, "(.dv)","_THR");
      saveAs("TIFF",dir2+THR);     //saves as a new tiff in dir2
      THR=getTitle();

  //Open raw .dv
  open(RAW);

      //make the SIMcheck modulation contrast (32bit)
      run("Modulation Contrast Map", "calculate_mcnr_from_raw_data=&RAW camera_bit_depth=16 or,_specify_mcnr_stack=None reconstructed_data_stack=&SIR");
      
      MCM=getTitle();
      MCMtxt=replace(MCM, "_MCM","_MCNR-log.txt");
      saveAs("TIFF",dir2+MCM);
      
      MCN=replace(RAW, ".dv","_MCN");
      selectImage(MCN);

      //make the same size
      run("Scale...","x=2 y=2 z=1.0 width=&w height=&h interpolation=Bicubic average create title=scaled");
//      //run("Threshold...");
//      setThreshold(5.0000, 50.0000);
//      run("NaN Background", "stack");
//      //make it a binary mask (8bit)
//      run("Convert to Mask", "method=Default background=Default");
//      //Turn it to 16bit to make it compatible with next step (16bit)
//      run("16-bit");

//      //but multiply the range to make it scale to 16bit
//      run("Multiply...", "value=257 stack");

//      //apply the 16bit modulation mask
//      imageCalculator("AND create stack",THR,"scaled");

      saveAs("TIFF",dir2+MCN);     //saves as a new tiff in dir2


//      closes all open images
      while (nImages>0) 
          { 
          selectImage(nImages); 
          close(); 
          }

//      Saves then closes log
    if (isOpen("Log")) {
      selectWindow("Log");
      saveAs("text",dir2+MCMtxt);
      run("Close");
      }

    }

}

print("All files have been cleaned :D")



